<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>Harp Device Pattern</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>SoundCard Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM8</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:DeviceDataWriter">
          <p1:Path>SoundCard.harp</p1:Path>
          <p1:Buffered>true</p1:Buffered>
          <p1:Overwrite>false</p1:Overwrite>
          <p1:FilterType>Include</p1:FilterType>
          <p1:MessageType xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>SoundCard Events</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Configure Digital Input</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SoundCard Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateConfigureDI0Payload">
          <p1:ConfigureDI0>StartSound</p1:ConfigureDI0>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateSoundIndexDI0Payload">
          <p1:SoundIndexDI0>2</p1:SoundIndexDI0>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SoundCard Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>